PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = test01
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine mask
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    ImageComponent image_2
      image [set every repeat] = $imgmask
      size = [0.5, 0.625]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine intro
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        from PIL import Image

        image_path = 'Images/step1.png'

        img = Image.open(image_path)
        img_width, img_height = img.size

        aspect_ratio = img_width / img_height

        target_height = 0.6

        target_width = target_height * aspect_ratio

        image_3.size = [target_width, target_height]
    ImageComponent image_3
      image = Images/step1.png
      startVal [time (s)] = 0.0
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    KeyboardComponent resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cue_3
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    ImageComponent cue
      image = Images/cue.png
      pos [set every repeat] = pos_f
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine pre_intro
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        from PIL import Image

        image_path = 'Images/preintro.png'

        img = Image.open(image_path)
        img_width, img_height = img.size

        aspect_ratio = img_width / img_height

        target_height = 0.4

        target_width = target_height * aspect_ratio

        img_pre_intro.size = [target_width, target_height]
    ImageComponent img_pre_intro
      image = Images/preintro.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro2
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        from PIL import Image

        image_path = 'Images/step2.png'

        img = Image.open(image_path)
        img_width, img_height = img.size

        aspect_ratio = img_width / img_height

        target_height = 0.6

        target_width = target_height * aspect_ratio

        img_step2.size = [target_width, target_height]
    ImageComponent img_step2
      image = Images/step2.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine change
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        from PIL import Image

        image_path = 'Images/change.png'

        img = Image.open(image_path)
        img_width, img_height = img.size

        aspect_ratio = img_width / img_height

        target_height = 0.4

        target_width = target_height * aspect_ratio

        img_change.size = [target_width, target_height]
    ImageComponent img_change
      image = Images/change.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        from PIL import Image

        image_path = 'Images/end.png'

        img = Image.open(image_path)
        img_width, img_height = img.size

        aspect_ratio = img_width / img_height

        target_height = 0.4

        target_width = target_height * aspect_ratio

        img_end.size = [target_width, target_height]
    ImageComponent img_end
      image = Images/end.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cue_cue
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    ImageComponent cue_2
      image = Images/cue.png
      pos [set every repeat] = pos_p
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine load
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  Routine mask_mask
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    ImageComponent image_5
      image [set every repeat] = $imgmask_p
      size = [0.5, 0.625]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine re_re
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        from PIL import Image

        image_path = 'Images/respond.png'

        img = Image.open(image_path)
        img_width, img_height = img.size

        aspect_ratio = img_width / img_height

        target_height = 0.15

        target_width = target_height * aspect_ratio

        image_4.size = [target_width, target_height]
    ImageComponent image_4
      image = Images/respond.png
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent key_resp
      allowedKeys = 'z','slash'
      correctAns = $correctRespond_p
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      storeCorrect = True
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  Routine re
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        from PIL import Image

        image_path = 'Images/respond.png'

        img = Image.open(image_path)
        img_width, img_height = img.size

        aspect_ratio = img_width / img_height

        target_height = 0.15

        target_width = target_height * aspect_ratio

        image_6.size = [target_width, target_height]
    ImageComponent image_6
      image = Images/respond.png
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent key_resp_6
      allowedKeys = 'z','slash'
      correctAns = $correctRespond
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      storeCorrect = True
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  Routine face_face
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    ImageComponent image
      image [set every repeat] = $Stim_p
      size = [0.5, 0.625]
      startVal [time (s)] = 0
      stopVal [frame N] = 3
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  Routine face
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    ImageComponent image_7
      image [set every repeat] = $Stim
      size = [0.5, 0.625]
      startVal [time (s)] = 0
      stopVal [frame N] = 3
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Flow
  Routine pre_intro
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = p.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Stim': 'Images/A_AN.png', 'Corr_res': 'z', 'pos': (-0.3, 0.15), 'maskpng': 'Images/A_M.png'},
      {'Stim': 'Images/B_AN.png', 'Corr_res': 'z', 'pos': (-0.3, -0.15), 'maskpng': 'Images/B_M.png'},
      {'Stim': 'Images/C_HA.png', 'Corr_res': 'slash', 'pos': (-0.3, 0.15), 'maskpng': 'Images/C_M.png'},
      {'Stim': 'Images/D_HA.png', 'Corr_res': 'slash', 'pos': (-0.3, -0.15), 'maskpng': 'Images/D_M.png'},
      {'Stim': 'Images/A_ST.png', 'Corr_res': 'z', 'pos': (-0.3, 0.15), 'maskpng': 'Images/A_M.png'},
      {'Stim': 'Images/D_ST.png', 'Corr_res': 'slash', 'pos': (-0.3, -0.15), 'maskpng': 'Images/D_M.png'},
      {'Stim': 'Images/B_WE.png', 'Corr_res': 'slash', 'pos': (-0.3, 0.15), 'maskpng': 'Images/B_M.png'},
      {'Stim': 'Images/C_WE.png', 'Corr_res': 'z', 'pos': (-0.3, -0.15), 'maskpng': 'Images/C_M.png'},
      {'Stim': 'Images/A_AN_T.png', 'Corr_res': 'z', 'pos': (-0.3, 0), 'maskpng': 'Images/A_M.png'},
      {'Stim': 'Images/C_AN_T.png', 'Corr_res': 'z', 'pos': (-0.3, 0), 'maskpng': 'Images/C_M.png'},
      {'Stim': 'Images/B_AN_B.png', 'Corr_res': 'z', 'pos': (-0.3, 0), 'maskpng': 'Images/B_M.png'},
      {'Stim': 'Images/D_AN_B.png', 'Corr_res': 'z', 'pos': (-0.3, 0), 'maskpng': 'Images/D_M.png'},
      {'Stim': 'Images/A_HA_T.png', 'Corr_res': 'slash', 'pos': (-0.3, 0), 'maskpng': 'Images/A_M.png'},
      {'Stim': 'Images/D_HA_T.png', 'Corr_res': 'slash', 'pos': (-0.3, 0), 'maskpng': 'Images/D_M.png'},
      {'Stim': 'Images/B_HA_B.png', 'Corr_res': 'slash', 'pos': (-0.3, 0), 'maskpng': 'Images/B_M.png'}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
    Routine cue_cue
    Routine face_face
    Routine mask_mask
    Routine re_re
  LoopTerminator trials
  Routine change
  Routine intro2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = formal.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Stim': 'Images/A_AN.png', 'correctRespond': 'z', 'pos': (-0.3, 0.15), 'imgmask': 'Images/12_M.png'},
      {'Stim': 'Images/A_AN.png', 'correctRespond': 'z', 'pos': (-0.3, -0.15), 'imgmask': 'Images/9_M.png'},
      {'Stim': 'Images/A_AN_B.png', 'correctRespond': 'z', 'pos': (-0.3, 0), 'imgmask': 'Images/12_M.png'},
      {'Stim': 'Images/A_AN_T.png', 'correctRespond': 'z', 'pos': (-0.3, 0), 'imgmask': 'Images/3_M.png'},
      {'Stim': 'Images/A_HA.png', 'correctRespond': 'slash', 'pos': (-0.3, 0.15), 'imgmask': 'Images/8_M.png'},
      {'Stim': 'Images/A_HA.png', 'correctRespond': 'slash', 'pos': (-0.3, -0.15), 'imgmask': 'Images/10_M.png'},
      {'Stim': 'Images/A_HA_B.png', 'correctRespond': 'slash', 'pos': (-0.3, 0), 'imgmask': 'Images/11_M.png'},
      {'Stim': 'Images/A_HA_T.png', 'correctRespond': 'slash', 'pos': (-0.3, 0), 'imgmask': 'Images/6_M.png'},
      {'Stim': 'Images/A_ST.png', 'correctRespond': 'z', 'pos': (-0.3, 0.15), 'imgmask': 'Images/7_M.png'},
      {'Stim': 'Images/A_ST.png', 'correctRespond': 'slash', 'pos': (-0.3, -0.15), 'imgmask': 'Images/6_M.png'},
      {'Stim': 'Images/A_WE.png', 'correctRespond': 'slash', 'pos': (-0.3, 0.15), 'imgmask': 'Images/3_M.png'},
      {'Stim': 'Images/A_WE.png', 'correctRespond': 'z', 'pos': (-0.3, -0.15), 'imgmask': 'Images/2_M.png'},
      {'Stim': 'Images/B_AN.png', 'correctRespond': 'z', 'pos': (-0.3, 0.15), 'imgmask': 'Images/5_M.png'},
      {'Stim': 'Images/B_AN.png', 'correctRespond': 'z', 'pos': (-0.3, -0.15), 'imgmask': 'Images/6_M.png'}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
    Routine cue_3
    Routine face
    Routine mask
    Routine re
  LoopTerminator trials_2
  Routine end
